<PlusConfiguration version="2.5">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: OptiTrack (Project file only)"
      Description="Broadcasting tracking data through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker" 
      ProjectFile="C:\Users\Deniz\Code\rfnavigation\OptiTrack\rfaNavigation.ttp"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" />
        <DataSource Type="Tool" Id="Reference" />
	<DataSource Type="Tool" Id="STOrange" />
	<DataSource Type="Tool" Id="STSilver" />

      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Stylus" />
        <DataSource Type="Tool" Id="Reference" />
	    <DataSource Type="Tool" Id="STOrange" />
	    <DataSource Type="Tool" Id="STSilver" />

	
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToReference" />
	<Transform Name="STOrangeToReference" />
    <Transform Name="STSilverToReference" />
	
	
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>
